begintemplate MOPPCell

public connect2target, subsets, is_art, is_connected
public sections
public all, soma, adend, bdend, cdend, ddend, dendrites
public xx, yy, zz, position
public syns
public syn_stim, syntest

create sections[1]

objref all, soma, adend, bdend, cdend, ddend, dendrites
objref adendidx, bdendidx, cdendidx, ddendidx
objref syns

id  = -1
gid = -1

ndends   = -1
ndendsec = -1
nDends   = -1

proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}

// dendrites 1 and 2 are apical
// dendrites 3 and 4 are basal

proc init() {
    
    // dendrites 1*ndendsec and 2*ndendsec are apical
    // dendrites 3*ndendsec and 4*ndendsec are basal
    
    adendidx = new Vector()
    bdendidx = new Vector()
    cdendidx = new Vector()
    ddendidx = new Vector()
    
    id  = $1
    gid = $2
    
    if (numarg() > 2) {
        topol_from_python($o4,$o5,$o6,$o7)
        shape_from_python($o7,$o8,$o9,$o10,$o11)
    } else {
        ndends   = 4
        ndendsec = 1
        create sections[ndends*ndendsec+1]
        
        i=0
        for j=0, ndendsec-1 { 
            adendidx.append(1+i*ndendsec + j)
        }
        i=1
        for j=0, ndendsec-1 { 
            bdendidx.append(1+i*ndendsec + j)
        }
        i=2
        for j=0, ndendsec-1 { 
            cdendidx.append(1+i*ndendsec + j)
        }
        i=3
        for j=0, ndendsec-1 { 
            ddendidx.append(1+i*ndendsec + j)
        }
        
        topol(ndends,ndendsec)
        geom()
    }
    subsets()
    geom_nseg()
    biophys()

    syns = new List()
}


proc subsets() { local i, ndends, ndendsec
    
    objref all, adend, bdend, cdend, ddend
    
    all = new SectionList()
    sections[0] all.append()
    for i=0, nDends-1 { 
        sections[i+1] all.append() 
    }
    
    dendrites = new SectionList()
    for i=0, nDends-1 { 
        sections[i+1] dendrites.append() 
    }

    soma = new SectionList()
    sections[0] soma.append()
    
    adend  = new SectionList()
    for i=0, adendidx.size()-1 { 
        sections[adendidx.x[i]] adend.append() 
    }
    
    bdend  = new SectionList()
    for i=0, bdendidx.size()-1 { 
        sections[bdendidx.x[i]] bdend.append() 
    }
    
    cdend  = new SectionList()
    for i=0, cdendidx.size()-1 { 
        sections[cdendidx.x[i]] cdend.append() 
    }
    
    ddend  = new SectionList()
    for i=0, ddendidx.size()-1 { 
        sections[ddendidx.x[i]] ddend.append() 
    }

}

proc geom() {
    
    sections[0] {nseg=1 L=20 diam=20} // changed L & diam
    
    sections[1] {nseg=3 L=180 diam=5}	// ncdend 1 and 2 are apical
    sections[2] {nseg=3 L=180 diam=5}
    sections[3] {nseg=3 L=140 diam=3} 	// ncdend 3 and 4 are basal
    sections[4] {nseg=3 L=140 diam=3}
    
}

func lambda_f() { local i, x, y, z, x1, x2, d1, d2, lam
    
    /*
    printf("lambda_f: n3d() = %d\n", n3d())
    if (n3d() <= 3) {
        for i=0, n3d()-1 {
            x = x3d(i)
            y = x3d(i)
            z = x3d(i)
            d = diam3d(i)
            printf("lambda_f: i = %d x = %g y = %g z = %g\n", i, x3d(i), y3d(i), z3d(i))
        }
    }
    */
    
    if (n3d() < 2) {
        return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
    }
    x1 = arc3d(0)
    d1 = diam3d(0)
    lam = 0
    for i=1, n3d()-1 {
        x2 = arc3d(i)
        d2 = diam3d(i)
        lam += (x2 - x1)/sqrt(d1 + d2)
        x1 = x2   d1 = d2
    }
    //  length of the section in units of lambda
    lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)
    
    return L/lam
}

proc geom_nseg() { local freq, d_lambda
    
    freq = 100 // Hz, frequency at which AC length constant will be computed
    d_lambda = 0.1
    
    forsec all { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }

}

proc topol() {
    
    ndends = $1
    ndendsec = $2
    
    nDends = ndends*ndendsec
    
    connect sections[1+0*ndendsec+0](0), sections[0](1)
    connect sections[1+1*ndendsec+0](0), sections[0](1)
    connect sections[1+2*ndendsec+0](0), sections[0](0)
    connect sections[1+3*ndendsec+0](0), sections[0](0)
    
    for i=0,ndends-1 {
        for j=1,ndendsec-1 {
	    connect sections[1+i*ndendsec+j](0), sections[1+i*ndendsec+(j-1)](1)
        }
    }
}    


proc biophys() {
    
    gna=0.075
    gkdr=0.0132
    gka=0.00001
    
    forsec all {
        Ra=100
    }
    
    forsec all {
        
	insert ccanl
        catau_ccanl = 3
        caiinf_ccanl = 5.e-6
	insert borgka
        gkabar_borgka=gka
	insert nca  // HAV-N- Ca channel
        gncabar_nca=0.0
	insert lca
        glcabar_lca=0.0015
	insert gskch
        gskbar_gskch=0.00475
	insert cagk
        gkbar_cagk=0.00001
	cm=1.8
    }
    
    forsec soma {
	insert ichan2
	insert na3
	gbar_na3=gna
	gnatbar_ichan2=0
	gkfbar_ichan2=gkdr
	gl_ichan2 = 0.0001063
    } 
    
    forsec dendrites {   
        
	insert ichan2
        insert na3           
        gbar_na3=gna*0.2
        //gkdrbar_kdr=gkdr*0.2
        //gkabar_kap = gka*0.2
	gkabar_borgka=gka*0.2
	gkfbar_ichan2=gkdr*0.2
	gnatbar_ichan2=0
	gl_ichan2 = 0.0001063
    }
    
    forsec all {
        ena = 55 
        ekf = -90  
        ek=-90  
        esk=-90 
        elca=130
	el_ichan2 =-63.1	
        cao_ccanl=2 
    }  // make catau slower70e-3 	cao=2 cai=50.e-6 
    
}


proc topol_from_python() { local i,j,p,s,dimsize localobj vidxs, vlayers, vsrc, vdst, secnodes
    
    // vlayers, vsrc, vdst, secnodes
    vlayers  = new Vector()
    vlayers.from_python($o1)
    vsrc     = new Vector()
    vsrc.from_python($o2)
    vdst     = new Vector()
    vdst.from_python($o3)
    secnodes = $o4
    
    nDends = secnodes.__len__()-1
    
    adendidx.append(1)
    bdendidx.append(2)
    cdendidx.append(3)
    ddendidx.append(4)
    
    na  = adendidx.size()
    nb  = bdendidx.size()
    nc  = cdendidx.size()
    nd  = ddendidx.size()
    
    create sections[nDends+1]
    for p = 0, vsrc.size-1 {
        i = vsrc.x[p]
        j = vdst.x[p]
        assert (i >= 0,  "compartment index in topology matrix is less than zero")
        assert (j >= 0,  "compartment index in topology matrix is less than zero")
        assert (i < nDends+1,  "compartment index in topology matrix is greater than the number of dendritic compartments")
        assert (j < nDends+1,  "compartment index in topology matrix is greater than the number of dendritic compartments")
        if (i == 0) {
            if (j == 1 || j == 2) {
                connect sections[j](0),sections[i](1)
            } else {
                connect sections[j](0),sections[i](0)
            }
        } else {
            connect sections[j](0),sections[i](1)
        }
        
    }
    
    vlayers.resize(0)
    vsrc.resize(0)
    vdst.resize(0)
    
}



proc shape_from_python() { local i,j,k,s localobj secnodes, vx, vy, vz, vradius, idxs, vidxs
    
    secnodes = $o1
    vx = new Vector()
    vx.from_python($o2)
    vy = new Vector()
    vy.from_python($o3)
    vz = new Vector()
    vz.from_python($o4)
    vradius = new Vector()
    vradius.from_python($o5)
    
    for s=0, secnodes.__len__()-1 {
        idxs = secnodes.__getitem__(s)
        vidxs = new Vector()
        vidxs.from_python(idxs)
        sections[s] {
            for i=0, vidxs.size()-1 {
                k = vidxs.x[i]
                pt3dadd(vx.x[k], vy.x[k], vz.x[k], 2*vradius.x[k]) 
            }
            pt3dconst(0)
        }
    }
    
    vx.resize(0)
    vy.resize(0)
    vz.resize(0)
    vradius.resize(0)
}


func is_art()  { return 0 }

obfunc connect2target() { localobj nc // $o1 target point process, optional $o2 returned NetCon
  sections[0] nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}

proc position() { local i
    
  sections[0] for i = 0, n3d()-1 {
    pt3dchange(i, $1-xx+x3d(i), $2-yy+y3d(i), $3-zz+z3d(i), diam3d(i))
  }
  xx = $1  yy = $2  zz = $3
}

external continuerun, cvode_active, cvode

obfunc syntest() { local vec_size, i_holding, w, idx localobj se, ns, nc, nclist, vec, synlist, results, tlog, nil
    
    synlist = $o1
    se = $o2
    w = $3
    v_holding = $4
    v_init = $5
    
    soma { 
        se.rs = 10
        se.dur1 = 1010
        se.amp1 = v_holding 
    }
    
    mainDT = 0.001
    dt = mainDT
    tstop = 1000
    
    vec_size = tstop/mainDT + 1
    
    vec = new Vector(vec_size)
    vec.record(&se.i)
    
    tlog = new Vector(vec_size)
    tlog.record(&t)
    
    ns = new NetStim()
    ns.interval = 1000
    ns.number = 1
    ns.start  = 200
    ns.noise  = 0
    
    nclist = new List()
    for idx=0, synlist.count()-1 {
        nc = new NetCon(ns,synlist.o(idx))
        nc.weight = w
        nc.delay = 0
        nclist.append(nc)
    }
    
    cvode_active(1)
    cvode.use_daspk(1)
    cvode.dae_init_dteps(1e-9, 2)

    finitialize(v_init)
    fadvance()
    continuerun(tstop)
    
    i_holding = vec.x[tlog.indwhere(">=",ns.start)]
    idx = tlog.indwhere(">=",ns.start) - 1
    vec.remove(0,idx)
    tlog.remove(0,idx)
    
    vec.printf()
    tlog.printf()
    
    i_peak = vec.min()
    t_peak = tlog.x[vec.indwhere("==",i_peak)]
    
    print "i_peak = ", i_peak
    print "i_holding = ", i_holding
    print "i_peak - i_holding = ", i_peak - i_holding
    
    amp = abs(i_peak - i_holding) * 1000
    
    i_0001 = i_holding + (i_peak - i_holding) * 1/10000
    i_10 = i_holding + (i_peak - i_holding) * 1/10
    i_20 = i_holding + (i_peak - i_holding) * 2/10
    i_50 = i_holding + (i_peak - i_holding) * 5/10
    i_80 = i_holding + (i_peak - i_holding) * 8/10
    i_90 = i_holding + (i_peak - i_holding) * 9/10
    
    t_10_90 = tlog.x[vec.indwhere("<",i_90)] - tlog.x[vec.indwhere("<",i_10)]
    t_20_80 = tlog.x[vec.indwhere("<",i_80)] - tlog.x[vec.indwhere("<",i_20)]
    
    t_all = t_peak - tlog.x[(vec.indwhere("<",i_0001))]
    t_50  = t_peak - tlog.x[(vec.indwhere(">",i_50))]
    
    idx = vec.indwhere("==",i_peak) - 1
    if (idx >= 0) {
        vec.remove(0,idx)
        tlog.remove(0,idx)
    }
    
    i_t	= i_holding - ((1/exp(1)) * abs(i_peak - i_holding))
    t_decay = tlog.x[vec.indwhere(">",i_t)] - tlog.x[0]
    
    results = new Vector()
    results.append(amp,t_10_90,t_20_80,t_all,t_50,t_decay)
    
    ns = nil
    nc = nil
    
    return results
}


endtemplate MOPPCell
